---
API: 3
OpenSesame: 4.1.9
Platform: nt
---
set width 2560
set title SceneViewing
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 0
set mouse_backend psycho
set keyboard_backend psycho
set height 1440
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\plcm\\Downloads"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome True
	run new_pygaze_init True
	run trial_loop True

define sketchpad image
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="[image_file]" scale=1 show_if=True x=0 y=0 z_index=0

define advanced_delay image_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 2250
	set description "A random delay sampled from either a normal or uniform distribution"

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=39 html=yes show_if=True text="[instruction_txt]" x=0 y=0 z_index=0

define pygaze_log log_instruction
	set throttle 2
	set msg instruction_txt_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	from openexp.mouse import mouse
	
	m = mouse(self.experiment)
	x, y = m.get_pos()
	var.cursor_x=x
	var.cursor_y=y
	__end__
	set _prepare ""

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes
	log cursor_x
	log cursor_y
	log response_time

define mouse_response new_mouse_response
	set timeout 0
	set show_cursor yes
	set linked_sketchpad image
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define pygaze_init new_pygaze_init
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log new_pygaze_log
	set throttle 2
	set msg image_file_onset
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description None

define sampler sentence_audio
	set volume 1
	set stop_after 0
	set sample "theBoyWIllEatTheCake.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define loop trial_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image_file "opensesame_pic1.jpeg"
	setcycle 0 timeout 3000
	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_start_recording True
	run image True
	run sentence_audio True
	run new_pygaze_log True
	run image_delay True
	run new_mouse_response True
	run new_inline_script True
	run new_logger True
	run new_pygaze_stop_recording True

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=47 html=yes show_if=True text="Welcome! Please enjoy viewing the following scene.<br /> <br />Left click on the brightest spot of each image displayed.<br /><br />Click on any key to start the experiment." x=0 y=0 z_index=0

